CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '—', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '—', 'Settings converted from legacy pipeline.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Settings converted from legacy pipeline.', 'Please change any color images from “Load as Grayscale image” to “Load as Color image”']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Select the rule criteria:and (file doesnot contain ".overlay") (file does contain ".png")
    Name to assign these images:Original
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '—', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Create Grayscale image for finding total tissue area']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
    Select the input image:Original
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1
    Relative weight of the green channel:1
    Relative weight of the blue channel:1
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
Smooth:[module_num:6|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notes:['Smooth grayscale image to remove dust and small open holes']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
    Select the input image:OrigGray
    Name the output image:OrigGraySmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
ImageMath:[module_num:7|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notes:['Invert grayscale image for futher analysis']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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Inverted
    Image or measurement?:Image
    Select the first image:OrigGraySmooth
    Multiply the first image by:1
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Find tissue using the grayscale image.', 'White is background, non-white is foreground.', 'Diameter is choosen after some testing.', "Using theshold method is based on trial and error, MoG Global does a good job of removing dark shaded area's in contrast to Threshold.", 'From now on, outlined foreground is called Tissue']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
    Select the input image:Inverted
    Name the primary objects to be identified:Tissue
    Typical diameter of objects, in pixel units (Min,Max):40,99999999
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Name the outline image:Tissue
    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:MoG
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.3
    Lower and upper bounds on threshold:0.06,1.0
    Approximate fraction of image covered by objects?:0.6
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
MeasureImageAreaOccupied:[module_num:9|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notes:['Measure Tissue areas']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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Tissue
    Retain a binary image of the object regions?:No
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
UnmixColors:[module_num:10|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notes:['Unmix the colors, and extract DAB', 'Create one grayscale DAB channel']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
    Stain count:1
    Select the input color image:Original
    Name the output name:DAB
    Stain:DAB
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
MaskImage:[module_num:11|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notes:['Use selected Tissue object to create a mask', "Only analyse what's in the 'Tissue' area"]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
    Select the input image:DAB
    Name the output image:DAB_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Tissue
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:12|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notes:['What works for CD3 in AAA tissue is:', 'Otsu Global', 'Three classes', 'Entropy', 'Foreground', 'Threshold 1.5', 'Lower 0.7 Upper 1.0', 'Shape / Shape']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
    Select the input image:DAB_masked
    Name the primary objects to be identified:DAB_Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,26
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:DAB_Nuclei_outline
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.7,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Entropy
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureImageAreaOccupied:[module_num:13|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notes:['Measure all DAB areas (within Tissue)']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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:DAB_Nuclei
    Retain a binary image of the object regions?:No
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
OverlayOutlines:[module_num:14|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notes:['Create outlines for visualisation.', 'The Tissue outline has a thick blue like']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Original
    Name the output image:Orig_Overlay
    Outline display mode:Color
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    Width of outlines:4
    Select outlines to display:Tissue
    Select outline color:Blue
    Load outlines from an image or objects?:Image
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
OverlayOutlines:[module_num:15|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notes:['Create outlines for visualisation.', 'The DAB outline is a thin line']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Orig_Overlay
    Name the output image:Orig_Overlay
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:DAB_Nuclei_outline
    Select outline color:Green
    Load outlines from an image or objects?:Image
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:Orig_Overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.outlines
    Saved file format:jpg
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:17|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
    Database type:MySQL / CSV
    Database name:DefaultDB
    Add a prefix to table names?:No
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    SQL file prefix:SQL_
    Output file location:Default Output Folder|None
    Create a CellProfiler Analyst properties file?:Yes
    Database host:
    Username:
    Password:
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    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:None
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:No
    Overwrite without warning?:Data only
    Access CPA images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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