CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'Settings converted from legacy pipeline.']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
    Filter images?:Custom
    Select the rule criteria:or (file does contain ".tile.tissue.png") (file does contain "ENTROPY_")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<NR>[^.]*)\\.(?P<STAIN>[^.]*).*\\.X(?P<X>[0-9]{1,4}).*\\.Y(?P<Y>[0-9]{1,4})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:or (file doesnot contain ".counted") (file does contain ".tile.tissue.png")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:ENTROPY_(?P<NR>[^.]*)\\.(?P<STAIN>[^.]*).*\\.X(?P<X>[0-9]{1,4}).*\\.Y(?P<Y>[0-9]{1,4})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "ENTROPY_") (file does contain ".bmp") (file doesnot contain ".counted")
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', 'Settings converted from legacy pipeline.', 'Please change any color images from Load as Grayscale image to Load as Color image.']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
    Assign a name to:Images matching rules
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    Match metadata:[{'Original': 'Y', 'EntropyImage': 'Y'}, {'Original': 'X', 'EntropyImage': 'X'}, {'Original': 'NR', 'EntropyImage': 'NR'}, {'Original': 'STAIN', 'EntropyImage': 'STAIN'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "ENTROPY_") (file doesnot contain ".counted") (file does contain ".tile.tissue.png")
    Name to assign these images:Original
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ENTROPY_")
    Name to assign these images:EntropyImage
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    Select the image type:Binary mask
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Create gray channel, this is used to find tissue (green)', 'Red is ussually a good channel for tissue.', 'RGB should also be fine.']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
    Select the input image:Original
    Conversion method:Combine
    Image type:Channels
    Name the output image:OriginalGray
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    Channel count:1
    Channel number:1
    Relative weight of the channel:1
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
ImageMath:[module_num:6|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Tissue_object
    Image or measurement?:Image
    Select the first image:OriginalGray
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Smooth:[module_num:7|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notes:['Smooth away the dust using a Gaussion Filter. This is used to find Tissue (green)']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
    Select the input image:Tissue_object
    Name the output image:OriginalGray_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:16.0
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify Tissue areas (black)']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
    Select the input image:OriginalGray_smooth
    Name the primary objects to be identified:Tissue_object
    Typical diameter of objects, in pixel units (Min,Max):120,5000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
UnmixColors:[module_num:9|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notes:['Split HE and DAB into separate channels']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
    Stain count:2
    Select the input color image:Original
    Name the output image:DAB
    Stain:DAB
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    Name the output image:Hematoxylin
    Stain:Hematoxylin
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
MaskImage:[module_num:10|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notes:['Only analyse HE in the previously defined Tissue (green)']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
    Select the input image:Hematoxylin
    Name the output image:Tissue_Masked_HE_channel
    Use objects or an image as a mask?:Objects
    Select object for mask:Tissue_object
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    Invert the mask?:No

MaskImage:[module_num:11|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notes:['Only analyse DAB in the previously defined Tissue']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
    Select the input image:DAB
    Name the output image:Tissue_Masked_DAB_channel
    Use objects or an image as a mask?:Objects
    Select object for mask:Tissue_object
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:12|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notes:['Identify DAB positive areas (yellow)']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
    Select the input image:Tissue_Masked_DAB_channel
    Name the primary objects to be identified:DAB_object
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0
    Lower and upper bounds on threshold:0.6,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskImage:[module_num:13|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notes:['Only analyse DAB in the previously defined Tissue']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
    Select the input image:Tissue_Masked_HE_channel
    Name the output image:DAB_stain_image
    Use objects or an image as a mask?:Objects
    Select object for mask:DAB_object
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:14|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notes:['Identify nuclei (green) in DAB positive areas (yellow)']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
    Select the input image:DAB_stain_image
    Name the primary objects to be identified:DAB_Nuclei_object
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0
    Lower and upper bounds on threshold:0.7,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
OverlayOutlines:[module_num:15|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notes:['The next outline is ontop of the previous one.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Original
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Green
    Select objects to display:DAB_Nuclei_object
    Select outline color:#F7F40A
    Select objects to display:DAB_object
    Select outline color:black
    Select objects to display:Tissue_object

SaveImages:[module_num:16|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notes:['Save outlined images', 'These image are usually not used for further analysis and can be stored in lossy JPEG if wanted.']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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.counted
    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureImageAreaOccupied:[module_num:17|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notes:['Measure Tissue (black) and DAB-HE nuclei (green) and DAB area (yellow)']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
    Measure the area occupied by:Both
    Select binary images to measure:DAB, Hematoxylin, OriginalGray, Tissue_object
    Select object sets to measure:DAB_Nuclei_object, DAB_object, Tissue_object

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Metadata
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    Select the metadata to use as the identifier:FileName_Original
    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CD66b_
    Overwrite existing files without warning?:Yes
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