CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (file does contain ".tile.png")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<NR>AE\d{1,4}).?(?P<T_NUMBER>(UMC|T.*?))?.(?P<STAIN>CD66b|CD66b_x\d+\_z\d+).?(?P<Date>[0-9]{4}[0-9]{2}[0-9]{2})?.(?P<X>X\d+).(?P<Y>Y\d+).*$
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain ".counted") (file does contain ".tile.png")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Original
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Create gray channel, this is used to find tissue (green)', 'Red is ussually a good channel for tissue.', 'RGB should also be fine.']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
    Select the input image:Original
    Conversion method:Combine
    Image type:Channels
    Name the output image:OriginalGray
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    Channel count:1
    Channel number:1
    Relative weight of the channel:1
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
Smooth:[module_num:6|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notes:['Smooth away the dust using a Gaussian Filter. This is used to find Tissue (green).']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
    Select the input image:OriginalGray
    Name the output image:ImageAfterSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20.0
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
ImageMath:[module_num:7|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notes:['Invert the gray image, black becomes white, white becomes black.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Tissue_object
    Image or measurement?:Image
    Select the first image:ImageAfterSmooth
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify total tissue area (green).']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
    Select the input image:Tissue_object
    Name the primary objects to be identified:Tissue
    Typical diameter of objects, in pixel units (Min,Max):50,10000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.19
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
OverlayObjects:[module_num:9|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notes:['Overlay tissue over original image']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enabled:False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
    Input:Original
    Name the output image:OverlayTissue
    Objects:Tissue
    Opacity:0.3

UnmixColors:[module_num:10|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notes:['Unmix the colors. Hematoxylin (blueish for nuclei) and Eosin (pinkish for tissue).']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
    Stain count:2
    Select the input color image:Original
    Name the output image:DAB
    Stain:DAB
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    Name the output image:Hematoxylin
    Stain:Hematoxylin
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
ColorToGray:[module_num:11|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notes:['Extract red channel from original image']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
    Select the input image:Original
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OriginalRed
    Convert green to gray?:No
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    Convert blue to gray?:No
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
ImageMath:[module_num:12|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notes:['Invert red channel']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Original_inverted
    Image or measurement?:Image
    Select the first image:OriginalRed
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:13|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notes:['Multiple DAB staining with red channel to amplify outstanding brown spots']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Cell_objects
    Image or measurement?:Image
    Select the first image:DAB
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Original_inverted
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:14|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notes:['Identify total CD66b stained area (brown).']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
    Select the input image:Cell_objects
    Name the primary objects to be identified:DAB_object
    Typical diameter of objects, in pixel units (Min,Max):13,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3448
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.59,0.8
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
MaskImage:[module_num:15|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notes:['Mask the HE staining image to the CD66b found area']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
    Select the input image:Hematoxylin
    Name the output image:Hematoxylin_DAB_object_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:DAB_object
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    Invert the mask?:No

Threshold:[module_num:16|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notes:['Problem: Upper threshold for IdentifyPrimaryObjects does not work', '', 'Solution: Add threshold and mask the image to the invert of the threshold']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
    Select the input image:Hematoxylin_DAB_object_masked
    Name the output image:Hematoxylin_Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.835,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskImage:[module_num:17|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notes:['Problem: Upper threshold for IdentifyPrimaryObjects does not work', '', 'Solution: Add threshold and mask the image to the invert of the threshold']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
    Select the input image:Hematoxylin_DAB_object_masked
    Name the output image:Mask_DAB_Objects
    Use objects or an image as a mask?:Image
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    Select image for mask:Hematoxylin_Threshold
    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:18|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notes:['Identify total CD66b stained nuclei area (blue).']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
    Select the input image:Mask_DAB_Objects
    Name the primary objects to be identified:DAB_Nuclei_object
    Typical diameter of objects, in pixel units (Min,Max):2,22
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.805,0.9
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RelateObjects:[module_num:19|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notes:['Determine Nuclei object children for found CD66b stained cells']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
    Parent objects:DAB_object
    Child objects:DAB_Nuclei_object
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:20|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notes:['Only keep CD66b cells that contain nuclei opbjects']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
    Select the objects to filter:DAB_object
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_DAB_Nuclei_object_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
OverlayObjects:[module_num:21|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notes:['Overlay CD66b areas with nuclei on orignal image']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
    Input:Original
    Name the output image:OverlayObjects
    Objects:FilterObjects
    Opacity:0.4

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:23|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notes:['Overlay outlines for all objects']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Original
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF0000
    Select objects to display:Tissue
    Select outline color:Green
    Select objects to display:FilterObjects
    Select outline color:Blue
    Select objects to display:DAB_Nuclei_object

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.counted
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureImageAreaOccupied:[module_num:25|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
    Measure the area occupied by:Objects
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    Select object sets to measure:DAB_Nuclei_object, DAB_object, FilterObjects, Tissue

ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Metadata
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    Select the metadata to use as the identifier:FileName_Original
    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CD66b_
    Overwrite existing files without warning?:Yes
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