CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (file does contain ".normalized.tile.tissue.png") (file does contain "ENTROPY_")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<NR>AE\d{1,4}).?(?P<T_NUMBER>(UMC|T.*?))?.(?P<STAIN>HE|HE_x\d+\_z\d+).?(?P<Date>[0-9]{4}[0-9]{2}[0-9]{2})?.(?P<X>X\d+).(?P<Y>Y\d+).*$
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:or (file doesnot contain ".counted") (file does contain ".tile.tissue.png")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:ENTROPY_(?P<NR>AE\d{1,4}).?(?P<T_NUMBER>(UMC|T.*?))?.(?P<STAIN>HE|HE_x\d+\_z\d+).?(?P<Date>[0-9]{4}[0-9]{2}[0-9]{2})?.(?P<X>X\d+).(?P<Y>Y\d+).*$
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "ENTROPY_") (file does contain ".bmp") (file doesnot contain ".counted")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Original
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Create gray channel, this is used to find tissue (green).', 'Red is ussually a good channel for tissue.', 'RGB should also be fine.']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
    Select the input image:Original
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
Smooth:[module_num:6|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notes:['Smooth away the dust using a Gaussian Filter. This is used to find Tissue (green).']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
    Select the input image:OrigGray
    Name the output image:ImageAfterMath
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20.0
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
ImageMath:[module_num:7|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notes:['Invert the gray image, black becomes white, white becomes black.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Tissue_object
    Image or measurement?:Image
    Select the first image:ImageAfterMath
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify total tissue area (green).']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
    Select the input image:Tissue_object
    Name the primary objects to be identified:Tissue
    Typical diameter of objects, in pixel units (Min,Max):50,10000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.065
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
UnmixColors:[module_num:9|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notes:['Unmix the colors. Hematoxylin (blueish for nuclei) and Eosin (pinkish for tissue).']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
    Stain count:2
    Select the input color image:Original
    Name the output image:HE
    Stain:Hematoxylin
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    Name the output image:Eosin
    Stain:Eosin
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
IdentifyPrimaryObjects:[module_num:10|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notes:['Identify total HE area (blue).']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
    Select the input image:HE
    Name the primary objects to be identified:HE_Nuclei
    Typical diameter of objects, in pixel units (Min,Max):12,36
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.70,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
OverlayOutlines:[module_num:11|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notes:['Measure total tissue area (green) and total HE positive stain (blue)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Original
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#118002
    Select objects to display:Tissue
    Select outline color:#0000FF
    Select objects to display:HE_Nuclei

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.counted
    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureImageAreaOccupied:[module_num:13|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notes:['Measure total tissue area (green) and total HE positive stain (red)']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
    Measure the area occupied by:Objects
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    Select object sets to measure:HE_Nuclei, Tissue

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Metadata
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    Select the metadata to use as the identifier:FileName_Original
    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:HE_
    Overwrite existing files without warning?:Yes
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