CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:16
HasImagePlaneDetails:False

LoadImages:[module_num:1|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notes:['1. Find Tissue area (green)', '2. Within Tissue area (green) Identify:', ' a. HE nuclei (blue)', ' b. DAB area (yellow)', '3. Within DAB area (yellow) Identify:', ' a. DAB nuclei (red)']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Type the text that the excluded images have in common:.counted
    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|None
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:Yes
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    Image count:1
    Text that these images have in common (case-sensitive):.tile.tissue.png
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<NR>[^.]*)\\\\.(?P<STAIN>[^.]*).*\\\\.X(?P<X>[0-9]{1,4}).*\\\\.Y(?P<Y>[0-9]{1,4})
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Original
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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notes:['Create gray channel, this is used to find tissue (green)', 'Red is ussually a good channel for tissue.', 'RGB should also be fine.']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
    Select the input image:Original
    Conversion method:Combine
    Image type:Channels
    Name the output image:OriginalGray
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    Channel count:1
    Channel number:Red: 1
    Relative weight of the channel:1
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
Morph:[module_num:3|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notes:['Invert created gray channel']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
    Select the input image:OriginalGray
    Name the output image:Tissue_object
    Select the operation to perform:invert
    Number of times to repeat operation:Once
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    Diameter:3
    Structuring element:Disk
    X offset:1
    Y offset:1
    Angle:0
    Width:3
    Height:3
    Custom:3,3,111111111
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
Smooth:[module_num:4|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notes:['Smooth away the dust using a Gaussion Filter. This is used to find Tissue (green)']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
    Select the input image:Tissue_object
    Name the output image:OriginalGray_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:16.0
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
IdentifyPrimaryObjects:[module_num:5|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notes:["Identify Tissue area's (green)"]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
    Select the input image:OriginalGray_smooth
    Name the primary objects to be identified:Tissue_object
    Typical diameter of objects, in pixel units (Min,Max):120,5000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Name the outline image:Tissue_object_green
    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.05
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
UnmixColors:[module_num:6|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notes:['Split HE and DAB into separate channels']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
    Stain count:2
    Select the input color image:Original
    Name the output name:DAB
    Stain:DAB
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    Name the output name:Hematoxylin
    Stain:Hematoxylin
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
MaskImage:[module_num:7|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notes:['Only analyse DAB in the previously defined Tissue']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
    Select the input image:DAB
    Name the output image:Tissue_Masked_DAB_channel
    Use objects or an image as a mask?:Objects
    Select object for mask:Tissue_object
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    Invert the mask?:No

MaskImage:[module_num:8|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notes:['Only analyse HE in the previously defined Tissue (green)']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
    Select the input image:Hematoxylin
    Name the output image:Tissue_Masked_HE_channel
    Use objects or an image as a mask?:Objects
    Select object for mask:Tissue_object
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify DAB positive area’s (yellow)']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
    Select the input image:Tissue_Masked_DAB_channel
    Name the primary objects to be identified:DAB_object
    Typical diameter of objects, in pixel units (Min,Max):8,5000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Name the outline image:DAB_object_yellow
    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskImage:[module_num:10|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notes:['Only analyse Nuclei (red) in the previously defined DAB tissue (yellow)']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
    Select the input image:DAB
    Name the output image:DAB_object_mask
    Use objects or an image as a mask?:Objects
    Select object for mask:DAB_object
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:11|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notes:['Find DAB positive nuclei (red) within masked image (green)']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
    Select the input image:DAB_object_mask
    Name the primary objects to be identified:nuclei_DAB
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:nuclei_DAB_red
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.3,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Entropy
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:12|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notes:['Find HE positive nuclei (blue) within masked image (green)']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
    Select the input image:Tissue_Masked_HE_channel
    Name the primary objects to be identified:nuclei_HE
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:nuclei_HE_blue
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.3,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Entropy
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
OverlayOutlines:[module_num:13|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notes:['The next outline is ontop of the previous one.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Original
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:Tissue_object_green
    Select outline color:Green
    Load outlines from an image or objects?:Image
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    Select outlines to display:nuclei_HE_blue
    Select outline color:Blue
    Load outlines from an image or objects?:Image
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    Select outlines to display:DAB_object_yellow
    Select outline color:Yellow
    Load outlines from an image or objects?:Image
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    Select outlines to display:nuclei_DAB_red
    Select outline color:Red
    Load outlines from an image or objects?:Image
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
SaveImages:[module_num:14|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notes:['Save outlined images', 'These image are usually not used for further analysis and can be stored in lossy JPEG if wanted.']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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.counted
    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureImageAreaOccupied:[module_num:15|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notes:['Measure Tissue (green) and HE nuclei (blue) and DAB area (yellow) and red) area']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
    Hidden:4
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:Tissue_object_green
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:DAB_object_yellow
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:nuclei_DAB_red
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:nuclei_HE_blue

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CD68_
    Overwrite existing files without warning?:No
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