CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:3
    Text that these images have in common (case-sensitive):ENTROPY_
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:TissueMaskImage
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):.tile.tissue.png
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:OriginalImage
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):LPR_
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:LPR_Image
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:TissueMaskImage
    Name the primary objects to be identified:Tissue
    Typical diameter of objects, in pixel units (Min,Max):150,4000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1.0
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    Method to distinguish clumped objects:None
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    Name the outline image:TisueOutlines
    Fill holes in identified objects?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:LPR_Image
    Name the primary objects to be identified:LPR_Area
    Typical diameter of objects, in pixel units (Min,Max):1,4000
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1.0
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    Method to distinguish clumped objects:None
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    Name the outline image:LPR_Area_Outlines
    Fill holes in identified objects?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Entropy
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    Handling of objects if excessive number of objects identified:Continue
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
OverlayOutlines:[module_num:4|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OriginalImage
    Name the output image:OverlayResults
    Select outline display mode:Color
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    Width of outlines:2
    Select outlines to display:TisueOutlines
    Select outline color:Green
    Select outlines to display:LPR_Area_Outlines
    Select outline color:Red

SaveImages:[module_num:5|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
    Select the type of image to save:Image
    Select the image to save:OverlayResults
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OriginalImage
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:.counted
    Select file format to use:png
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No
