CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:original
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
UnmixColors:[module_num:5|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
    Stain count:5
    Select the input color image:original
    Name the output name:highdef_yellow
    Stain:Custom
    Red absorbance:0.480306
    Green absorbance:0.560244
    Blue absorbance:0.674857
    Name the output name:HE
    Stain:Custom
    Red absorbance:0.526374
    Green absorbance:0.666769
    Blue absorbance:0.527589
    Name the output name:NKT
    Stain:Custom
    Red absorbance:0.459621
    Green absorbance:0.570515
    Blue absorbance:0.680633
    Name the output name:background_grey
    Stain:Custom
    Red absorbance:0.590032
    Green absorbance:0.629084
    Blue absorbance:0.506078
    Name the output name:background_tissue
    Stain:Fast blue
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:HE
    Name the primary objects to be identified:HE_TISSUE
    Typical diameter of objects, in pixel units (Min,Max):1,4000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.45,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Entropy
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:NKT
    Name the primary objects to be identified:NKT_OBJ
    Typical diameter of objects, in pixel units (Min,Max):1,4000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.5,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Entropy
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:highdef_yellow
    Name the primary objects to be identified:yellow
    Typical diameter of objects, in pixel units (Min,Max):1,4000
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.3,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureImageAreaOccupied:[module_num:9|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:HE_TISSUE
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:NKT_OBJ
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:yellow
    Retain a binary image of the object regions?:No
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:original
    Name the output image:overlay_NKT
    Outline display mode:Color
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    Width of outlines:2
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    Select outline color:#EB6732
    Load outlines from an image or objects?:Objects
    Select objects to display:NKT_OBJ

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:overlay_NKT
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    Select method for constructing file names:From image filename
    Select image name for file prefix:original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:OVERLAY_
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/NKT images/colorsetting
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Result_
    Overwrite existing files without warning?:Yes
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