CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (file does contain ".tile.tissue.png") (file does contain "ENTROPY_")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<NR>[^.]*)\\\\.(?P<STAIN>[^.]*).*\\\\.X(?P<X>[0-9]{1,4}).*\\\\.Y(?P<Y>[0-9]{1,4})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:or (file doesnot contain ".counted") (file does contain ".tile.tissue.png")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:ENTROPY_(?P<NR>[^.]*)\\\\.(?P<STAIN>[^.]*).*\\\\.X(?P<X>[0-9]{1,4}).*\\\\.Y(?P<Y>[0-9]{1,4})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "ENTROPY_") (file does contain ".bmp") (file doesnot contain ".counted")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Original
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Original
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
Smooth:[module_num:6|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
    Select the input image:OrigGray
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20.0
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
ImageMath:[module_num:7|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:OrigGray
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:Tissue
    Typical diameter of objects, in pixel units (Min,Max):50,10000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.165
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
UnmixColors:[module_num:9|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
    Stain count:2
    Select the input color image:Original
    Name the output name:EVG
    Stain:Custom
    Red absorbance:0.20333
    Green absorbance:0.51696
    Blue absorbance:0.505697
    Name the output name:EVG_IDENTIFYING
    Stain:Eosin
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:EVG_IDENTIFYING
    Name the primary objects to be identified:EVG_Tissue
    Typical diameter of objects, in pixel units (Min,Max):1,20000
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:.8
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Entropy
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigGray
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:3
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    Select outline color:#107F01
    Load outlines from an image or objects?:Objects
    Select objects to display:Tissue
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    Select outline color:#FB0106
    Load outlines from an image or objects?:Objects
    Select objects to display:EVG_Tissue

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.counted
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureImageAreaOccupied:[module_num:13|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notes:['Measure total tissue area (green) and total EvG positive stain (red)']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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:EVG_Tissue
    Retain a binary image of the object regions?:Yes
    Name the output binary image:EVG_red
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Tissue
    Retain a binary image of the object regions?:Yes
    Name the output binary image:Tissue_green
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
ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|Desktop/FIBRINTEST/cp_output
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Metadata
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    Select the metadata to use as the identifier:FileName_Original
    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:EVG_
    Overwrite existing files without warning?:Yes
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