CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['# Load brightfield and polorizes SR slides', '(b.g.l.nelissen@umcutrecht.nl)', 'Goal: Measure collagen and total tissue area (SR_POLARIZED and SR)', 'We define SR_POLARIZED as blue and SR as green']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):SR.scaled.png
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<STUDYNR>[0-9a-zA-Z]*).(?P<STAIN>[0-9a-zA-Z]*).(?P<REST>.*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:SR
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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notes:['# SR', 'Create Grayscale image for finding total tissue area']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
    Select the input image:SR
    Conversion method:Combine
    Image type::RGB
    Name the output image:SR.Gray.INV
    Relative weight of the red channel:1
    Relative weight of the green channel:1
    Relative weight of the blue channel:1
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
ImageMath:[module_num:3|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notes:['# SR', 'Invert grayscale image for futher analysis']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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:SR.Gray
    Image or measurement?:Image
    Select the first image:SR.Gray.INV
    Multiply the first image by:1
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    Image or measurement?:Image
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
ApplyThreshold:[module_num:4|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notes:['# SR', 'We need to get rid of those black marker dots in the corner of the screen', 'Therefor we want to mask these areas.', 'A mask needs to be binary (black/white)', "To identify the black marker dots we set a threshold to identify all black-dark area's"]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
    Select the input image:SR.Gray
    Name the output image:SR.mask
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.8
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
Smooth:[module_num:5|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notes:['# SR', 'We need to smooth the previous identified black marker dots at bit to fill small holes']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
    Select the input image:SR.mask
    Name the output image:SR.mask
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:30
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
ApplyThreshold:[module_num:6|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notes:['# SR', 'The smoothed mask needs to become binary again.']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
    Select the input image:SR.mask
    Name the output image:SR.mask
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.2
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
ImageMath:[module_num:7|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notes:['# SR', 'The mask is now created, we only need to invert it (black = white and white = black)', '']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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:SR.mask
    Image or measurement?:Image
    Select the first image:SR.mask
    Multiply the first image by:1
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    Image or measurement?:Image
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
MaskImage:[module_num:8|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notes:['# SR', 'Here we apply the mask and use it to remove the black marker dots']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
    Select the input image:SR.Gray
    Name the output image:SR.Gray.masked
    Use objects or an image as a mask?:Image
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    Select image for mask:SR.mask
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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notes:['# SR', 'Find tissue using the grayscale image.', 'Diameter is choosen after some testing.', 'These settings are choosen after multiple tests']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
    Select the input image:SR.Gray.masked
    Name the primary objects to be identified:SR.TISSUE.green
    Typical diameter of objects, in pixel units (Min,Max):10,99999999
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Method to distinguish clumped objects:None
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    Name the outline image:SR.TISSUE.green
    Fill holes in identified objects?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
OverlayOutlines:[module_num:10|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notes:['# SR', 'Show what we defined as objects using a green outline']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:SR
    Name the output image:SR.Overlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:SR.TISSUE.green
    Select outline color:Green

SaveImages:[module_num:11|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notes:['# SR', 'Save a copy of SR including measurements outlines in green.']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
    Select the type of image to save:Image
    Select the image to save:SR.Overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:SR
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:.cellprofiler
    Select file format to use:png
    Output file location:Default Output Folder sub-folder|outline
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

MeasureImageAreaOccupied:[module_num:12|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notes:['# SR', 'Measure area in pixels (green and blue)', 'Both measurements are done using the same scaled image and can there be used to calculate a ratio.']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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:SR.TISSUE.green
    Retain a binary image of the object regions?:No
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
ExportToSpreadsheet:[module_num:13|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notes:['# SR', "A folder 'SR' is created in the outputfolder and contains 'Image.csv' with your measurements", "Using 'Press to select measurements' you can choose to export additional measurements", "Using 'Data to export' you can choose to export addition datasets"]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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|SR
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:Image|AreaOccupied_AreaOccupied_SR.TISSUE.green,Image|FileName_SR,Image|PathName_SR,Image|Metadata_STUDYNR
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
