CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['# Load polorizes SR slides', '(b.g.l.nelissen@umcutrecht.nl)', 'Goal: Measure polarized collagen area (SR_POLARIZED)', 'We define SR_POLARIZED as blue']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):SR_POLARIZED.scaled.png
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<STUDYNR>[0-9a-zA-Z]*).(?P<STAIN>[0-9a-zA-Z]*).(?P<REST>.*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:SR_POLARIZED
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    Rescale intensities?:Yes

RescaleIntensity:[module_num:2|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notes:['# SR_POLARIZED', 'Rescale intensity to re-level the brightness of each image and make further analysis more uniform.', '']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
    Select the input image:SR_POLARIZED
    Name the output image:Original
    Select rescaling method:Divide by the image's maximum
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
ColorToGray:[module_num:3|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notes:['# SR_POLARIZED', 'Create Grayscale image for finding total tissue area', '']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
    Select the input image:Original
    Conversion method:Combine
    Image type::Channels
    Name the output image:SR_POLARIZED.Gray
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    Channel count:1
    Channel number::Green: 2
    Relative weight of the channel:1
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
IdentifyPrimaryObjects:[module_num:4|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notes:['# SR_POLARIZED', 'Find tissue using the grayscale image.', 'Diameter is choosen after some testing.', 'These settings are choosen after multiple tests']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
    Select the input image:SR_POLARIZED.Gray
    Name the primary objects to be identified:SR_POLARIZED.TISSUE.blue
    Typical diameter of objects, in pixel units (Min,Max):10,99999999
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Method to distinguish clumped objects:None
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    Name the outline image:SR_POLARIZED.TISSUE.blue
    Fill holes in identified objects?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
OverlayOutlines:[module_num:5|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notes:['# SR_POLARIZED', 'Show what we defined as objects using a blue outline']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:SR_POLARIZED
    Name the output image:SR_POLARIZED.Overlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:SR_POLARIZED.TISSUE.blue
    Select outline color:Blue

SaveImages:[module_num:6|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notes:['# SR_POLARIZED', 'Save a copy of SR_POLARIZED including measurements outlines in blue.']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
    Select the type of image to save:Image
    Select the image to save:SR_POLARIZED.Overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:SR_POLARIZED
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:.cellprofiler
    Select file format to use:png
    Output file location:Default Output Folder sub-folder|outline
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

MeasureImageAreaOccupied:[module_num:7|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notes:['# SR_POLARIZED & SR', 'Measure area in pixels (green and blue)', 'Both measurements are done using the same scaled image and can there be used to calculate a ratio.']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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:SR_POLARIZED.TISSUE.blue
    Retain a binary image of the object regions?:No
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
ExportToSpreadsheet:[module_num:8|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notes:['# SR_POLARIZED', "A folder 'SR_Polarized' is created in the outputfolder and contains 'Image.csv' with your measurements", "Using 'Press to select measurements' you can choose to export additional measurements", "Using 'Data to export' you can choose to export addition datasets"]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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|SR_POLARIZED
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:Image|AreaOccupied_AreaOccupied_SR_POLARIZED.TISSUE.blue,Image|FileName_SR_POLARIZED,Image|PathName_SR_POLARIZED,Image|Metadata_STUDYNR
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
