CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['# Pipeline created for HPC (b.g.l.nelissen@umcutrecht.nl)', '# Goal: Measure total tissue area, DAB area and DAB positive cells', '# Outlines: Tissue blue, DAB nuclei green', '', '# Testing oneliner: find ./ -name "*tile-*" -not -path "*out*" -type d -exec  "$(command -v "slideJobsCellProfiler")"  -i "{}" -p "pipeline.cp" \\\\; | parallel']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Type the text that the excluded images have in common:.overlay
    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:Yes
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    Image count:1
    Text that these images have in common (case-sensitive):.png
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Original
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    Rescale intensities?:No

ColorToGray:[module_num:2|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notes:['Create Grayscale image for finding total tissue area']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
    Select the input image:Original
    Conversion method:Combine
    Image type::RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1
    Relative weight of the green channel:1
    Relative weight of the blue channel:1
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
Smooth:[module_num:3|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notes:['Smooth grayscale image to remove dust and small open holes']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
    Select the input image:OrigGray
    Name the output image:OrigGraySmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:20
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
ImageMath:[module_num:4|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notes:['Invert grayscale image for futher analysis']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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Inverted
    Image or measurement?:Image
    Select the first image:OrigGraySmooth
    Multiply the first image by:1
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Find tissue using the grayscale image.', 'White is background, non-white is foreground.', 'Diameter is choosen after some testing.', "Using theshold method is based on trial and error, MoG Global does a good job of removing dark shaded area's in contrast to Threshold.", 'From now on, outlined foreground is called Tissue']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
    Select the input image:Inverted
    Name the primary objects to be identified:Tissue
    Typical diameter of objects, in pixel units (Min,Max):40,99999999
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:MoG Global
    Threshold correction factor:0.3
    Lower and upper bounds on threshold:0.06,1.0
    Approximate fraction of image covered by objects?:0.6
    Method to distinguish clumped objects:None
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    Name the outline image:Tissue
    Fill holes in identified objects?:Yes
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureImageAreaOccupied:[module_num:6|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notes:['Measure Tissue areas']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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Tissue
    Retain a binary image of the object regions?:No
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
UnmixColors:[module_num:7|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notes:['Unmix the colors, and extract DAB', 'Create one grayscale DAB channel']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
    Stain count:1
    Color image:Original
    Image name:DAB
    Stain:DAB
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
MaskImage:[module_num:8|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notes:['Use selected Tissue object to create a mask', "Only analyse what's in the 'Tissue' area"]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
    Select the input image:DAB
    Name the output image:DAB_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Tissue
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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notes:['What works for CD3 in AAA tissue is:', 'Otsu Global', 'Three classes', 'Entropy', 'Foreground', 'Threshold 1.5', 'Lower 0.7 Upper 1.0', 'Shape / Shape']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
    Select the input image:DAB_masked
    Name the primary objects to be identified:DAB_Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,26
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.7,1.0
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:DAB_Nuclei_outline
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Entropy
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureImageAreaOccupied:[module_num:10|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notes:['Measure all DAB areas (within Tissue)']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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:DAB_Nuclei
    Retain a binary image of the object regions?:No
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
OverlayOutlines:[module_num:11|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notes:['Create outlines for visualisation.', 'The Tissue outline has a thick blue like']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Original
    Name the output image:Orig_Overlay
    Select outline display mode:Color
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    Width of outlines:4
    Select outlines to display:Tissue
    Select outline color:Blue

OverlayOutlines:[module_num:12|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notes:['Create outlines for visualisation.', 'The DAB outline is a thin line']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Orig_Overlay
    Name the output image:Orig_Overlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:DAB_Nuclei_outline
    Select outline color:Green

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:Orig_Overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:.outlines
    Select file format to use:jpg
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

ExportToDatabase:[module_num:14|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
    Database type:MySQL / CSV
    Database name:DefaultDB
    Add a prefix to table names?:No
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    SQL file prefix:SQL_
    Output file location:Default Output Folder|None
    Create a CellProfiler Analyst properties file?:Yes
    Database host:
    Username:
    Password:
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    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object or a single object table?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Hidden:1
    Hidden:1
    Hidden:0
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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
ExportToSpreadsheet:[module_num:15|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:Yes
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