CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '—', 'Settings converted from legacy pipeline.']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
    Filter images?:Custom
    Select the rule criteria:or (file does contain ".tile.tissue.png") (file does contain "ENTROPY_")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '—', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<NR>[^.]*)\\\\.(?P<STAIN>[^.]*).*\\\\.X(?P<X>[0-9]{1,4}).*\\\\.Y(?P<Y>[0-9]{1,4})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:or (file doesnot contain ".counted") (file does contain ".tile.tissue.png")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:ENTROPY_(?P<NR>[^.]*)\\\\.(?P<STAIN>[^.]*).*\\\\.X(?P<X>[0-9]{1,4}).*\\\\.Y(?P<Y>[0-9]{1,4})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "ENTROPY_") (file does contain ".bmp") (file doesnot contain ".counted")
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Match metadata:[{'Original': 'Y', u'EntropyImage': 'Y'}, {'Original': 'X', u'EntropyImage': 'X'}, {'Original': 'NR', u'EntropyImage': 'NR'}, {'Original': 'STAIN', u'EntropyImage': 'STAIN'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file doesnot contain "ENTROPY_") (file doesnot contain ".counted") (file does contain ".tile.tissue.png")
    Name to assign these images:Original
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ENTROPY_")
    Name to assign these images:EntropyImage
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    Select the image type:Binary mask
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '—', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
UnmixColors:[module_num:5|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notes:['Split HE and DAB into separate channels']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
    Stain count:2
    Select the input color image:Original
    Name the output name:DAB
    Stain:DAB
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    Name the output name:Hematoxylin
    Stain:Hematoxylin
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
ApplyThreshold:[module_num:6|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notes:['Define HE positive area']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
    Select the input image:Hematoxylin
    Name the output image:Area_Hematoxyin
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Entropy
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
ApplyThreshold:[module_num:7|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notes:['Define DAB positive area']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
    Select the input image:DAB
    Name the output image:Area_DAB
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureImageAreaOccupied:[module_num:8|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notes:['Measure DAB and HE area']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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:Area_Hematoxyin
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:Area_DAB

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify DAB positive area’s']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
    Select the input image:DAB
    Name the primary objects to be identified:DAB_object
    Typical diameter of objects, in pixel units (Min,Max):9,10000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Name the outline image:object_DAB
    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskImage:[module_num:10|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notes:['Create a mask to identify tissue inwhich we count DAB positive objects']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
    Select the input image:Hematoxylin
    Name the output image:DAB_object_mask
    Use objects or an image as a mask?:Objects
    Select object for mask:DAB_object
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:11|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notes:['Find DAB positive nuclei']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
    Select the input image:DAB_object_mask
    Name the primary objects to be identified:nuclei_DAB_only
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:nuclei_DAB
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.3,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Entropy
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:12|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notes:['Find HE positive nuclei']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
    Select the input image:Hematoxylin
    Name the primary objects to be identified:nuclei_hematoxylin
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:nuclei_all
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.3,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Entropy
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
OverlayOutlines:[module_num:13|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notes:['Overlay outlines of identified objects']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Original
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:object_DAB
    Select outline color:Yellow
    Load outlines from an image or objects?:Image
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    Select outlines to display:nuclei_all
    Select outline color:Blue
    Load outlines from an image or objects?:Image
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    Select outlines to display:nuclei_DAB
    Select outline color:Red
    Load outlines from an image or objects?:Image
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
SaveImages:[module_num:14|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notes:['Save outlined images', 'These image are usually not used for further analysis and can be stored in lossy JPEG if wanted.']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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.counted
    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Image|Count_DAB_object,Image|Width_Original,Image|Height_Original,Image|FileName_Original,nuclei_DAB_only|Location_Center_Y,nuclei_DAB_only|Location_Center_X,nuclei_DAB_only|Number_Object_Number,DAB_object|Number_Object_Number,DAB_object|Location_Center_Y,DAB_object|Location_Center_X
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CD68_
    Overwrite existing files without warning?:Yes
    Data to export:DAB_object
    Combine these object measurements with those of the previous object?:No
    File name:DAB_OBJECT.txt
    Use the object name for the file name?:No
    Data to export:nuclei_DAB_only
    Combine these object measurements with those of the previous object?:No
    File name:NUCLEI_DAB.txt
    Use the object name for the file name?:No
    Data to export:nuclei_hematoxylin
    Combine these object measurements with those of the previous object?:No
    File name:NUCLEI_HEMATOXYLIN.txt
    Use the object name for the file name?:No
