CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['1. Find Tissue area (green)', '2. Within Tissue area (green) Identify:', ' a. HE nuclei (blue)', ' b. DAB area (yellow)', '3. Within DAB area (yellow) Identify:', ' a. DAB nuclei (red)']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Type the text that the excluded images have in common:.counted
    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:Yes
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    Image count:1
    Text that these images have in common (case-sensitive):.tile.tissue.png
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<NR>[^.]*)\\.(?P<STAIN>[^.]*).*\\.X(?P<X>[0-9]{1,4}).*\\.Y(?P<Y>[0-9]{1,4})
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Original
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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notes:['Create gray channel, this is used to find tissue (green)', 'Red is ussually a good channel for tissue.', 'RGB should also be fine.']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
    Select the input image:Original
    Conversion method:Combine
    Image type::Channels
    Name the output image:OriginalGray
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    Channel count:1
    Channel number::Red: 1
    Relative weight of the channel:1
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
Morph:[module_num:3|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notes:['Invert created gray channel']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
    Select the input image:OriginalGray
    Name the output image:Tissue_object
    Select the operation to perform:invert
    Number of times to repeat operation:Once
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    Scale:3

Smooth:[module_num:4|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notes:['Smooth away the dust using a Gaussion Filter. This is used to find Tissue (green)']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
    Select the input image:Tissue_object
    Name the output image:OriginalGray_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:16.0
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
IdentifyPrimaryObjects:[module_num:5|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notes:["Identify Tissue area's (green)"]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
    Select the input image:OriginalGray_smooth
    Name the primary objects to be identified:Tissue_object
    Typical diameter of objects, in pixel units (Min,Max):120,5000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:None
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    Name the outline image:Tissue_object_green
    Fill holes in identified objects?:Yes
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    Manual threshold:0.05
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
UnmixColors:[module_num:6|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notes:['Split HE and DAB into separate channels']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
    Stain count:2
    Color image:Original
    Image name:DAB
    Stain:DAB
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    Image name:Hematoxylin
    Stain:Hematoxylin
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
MaskImage:[module_num:7|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notes:['Only analyse DAB in the previously defined Tissue']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
    Select the input image:DAB
    Name the output image:Tissue_Masked_DAB-channel
    Use objects or an image as a mask?:Objects
    Select object for mask:Tissue_object
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    Invert the mask?:No

MaskImage:[module_num:8|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notes:['Only analyse HE in the previously defined Tissue (green)']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
    Select the input image:Hematoxylin
    Name the output image:Tissue_Masked_HE-channel
    Use objects or an image as a mask?:Objects
    Select object for mask:Tissue_object
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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notes:["Identify DAB positive area's (yellow)"]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
    Select the input image:Tissue_Masked_DAB-channel
    Name the primary objects to be identified:DAB_object
    Typical diameter of objects, in pixel units (Min,Max):8,5000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:0
    Lower and upper bounds on threshold:0.1,1.0
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    Method to distinguish clumped objects:None
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    Name the outline image:DAB_object_yellow
    Fill holes in identified objects?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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    Handling of objects if excessive number of objects identified:Continue
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
MaskImage:[module_num:10|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notes:['Only analyse Nuclei (red) in the previously defined DAB tissue (yellow)']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
    Select the input image:DAB
    Name the output image:DAB_object_mask
    Use objects or an image as a mask?:Objects
    Select object for mask:DAB_object
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:11|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notes:['Find DAB positive nuclei (red) within masked image (green)']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
    Select the input image:DAB_object_mask
    Name the primary objects to be identified:nuclei_DAB
    Typical diameter of objects, in pixel units (Min,Max):8,30
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu PerObject
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.1,1.0
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    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:nuclei_DAB_red
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
    Automatically calculate the threshold using the Otsu method?:Yes
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:12|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notes:['Find HE positive nuclei (blue) within masked image (green)']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
    Select the input image:Tissue_Masked_HE-channel
    Name the primary objects to be identified:nuclei_HE
    Typical diameter of objects, in pixel units (Min,Max):8,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.3,1.0
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:nuclei_HE_blue
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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    Handling of objects if excessive number of objects identified:Continue
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
OverlayOutlines:[module_num:13|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notes:['The next outline is ontop of the previous one.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Original
    Name the output image:OrigOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:Tissue_object_green
    Select outline color:Green
    Select outlines to display:nuclei_HE_blue
    Select outline color:Blue
    Select outlines to display:DAB_object_yellow
    Select outline color:Yellow
    Select outlines to display:nuclei_DAB_red
    Select outline color:Red

SaveImages:[module_num:14|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notes:['Save outlined images', 'These image are usually not used for further analysis and can be stored in lossy JPEG if wanted.']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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:.counted
    Select file format to use:png
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

MeasureImageAreaOccupied:[module_num:15|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notes:['Measure Tissue (green) and HE nuclei (blue) and DAB area (yellow) and red) area']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
    Hidden:4
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:Tissue_object_green
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:DAB_object_yellow
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:nuclei_DAB_red
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:nuclei_HE_blue

ExportToDatabase:[module_num:16|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notes:['Export findings to database for further analysis']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
    Database type:MySQL / CSV
    Database name:CellProfiler
    Add a prefix to table names?:No
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    SQL file prefix:SQL_
    Output file location:Default Output Folder|None
    Create a CellProfiler Analyst properties file?:No
    Database host:localhost
    Username:cp
    Password:Count!
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    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
    Calculate the per-well mean values of object measurements?:Yes
    Calculate the per-well median values of object measurements?:Yes
    Calculate the per-well standard deviation values of object measurements?:Yes
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object or a single object table?:Single object table
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    Write image thumbnails directly to the database?:No
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    Hidden:1
    Hidden:1
    Hidden:0
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