CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:original
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
UnmixColors:[module_num:5|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
    Stain count:5
    Select the input color image:original
    Name the output image:highdef_yellow
    Stain:Custom
    Red absorbance:0.480306
    Green absorbance:0.560244
    Blue absorbance:0.674857
    Name the output image:HE
    Stain:Custom
    Red absorbance:0.526374
    Green absorbance:0.666769
    Blue absorbance:0.527589
    Name the output image:NKT
    Stain:Custom
    Red absorbance:0.459621
    Green absorbance:0.570515
    Blue absorbance:0.680633
    Name the output image:background_grey
    Stain:Custom
    Red absorbance:0.590032
    Green absorbance:0.629084
    Blue absorbance:0.506078
    Name the output image:background_tissue
    Stain:Fast blue
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:HE
    Name the primary objects to be identified:HE_TISSUE
    Typical diameter of objects, in pixel units (Min,Max):1,4000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.45,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:NKT
    Name the primary objects to be identified:NKT_OBJ
    Typical diameter of objects, in pixel units (Min,Max):1,4000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.5,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:highdef_yellow
    Name the primary objects to be identified:yellow
    Typical diameter of objects, in pixel units (Min,Max):1,4000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.3,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureImageAreaOccupied:[module_num:9|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
    Measure the area occupied by:Objects
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    Select object sets to measure:NKT_OBJ, yellow, HE_TISSUE

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:original
    Name the output image:overlay_NKT
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#EB6732
    Select objects to display:NKT_OBJ

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:overlay_NKT
    Select method for constructing file names:From image filename
    Select image name for file prefix:original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:OVERLAY_
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/NKT images/colorsetting
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Metadata
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    Select the metadata to use as the identifier:FileName_original
    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CD3_CD56_NKT_
    Overwrite existing files without warning?:Yes
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