CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['1. Find Tissue area (green)', '2. Within Tissue area (green) Identify:', ' a. HE nuclei (blue)', ' b. DAB area (yellow)', '3. Within DAB area (yellow) Identify:', ' a. DAB nuclei (red)']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Type the text that the excluded images have in common:.counted
    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:Yes
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    Image count:2
    Text that these images have in common (case-sensitive):.tile.tissue.png
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<NR>[^.]*)\\.(?P<STAIN>[^.]*).*\\.X(?P<X>[0-9]{1,4}).*\\.Y(?P<Y>[0-9]{1,4})
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Original
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):tile.tissue.bmp
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:ENTROPY_(?P<NR>[^.]*)\\.(?P<STAIN>[^.]*).*\\.X(?P<X>[0-9]{1,4}).*\\.Y(?P<Y>[0-9]{1,4})
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:entropy_image
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    Rescale intensities?:Yes

ApplyThreshold:[module_num:2|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
    Select the input image:entropy_image
    Name the output image:entropy_image_binary
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.01
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
IdentifyPrimaryObjects:[module_num:3|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notes:["Identify Tissue area's (green)"]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
    Select the input image:entropy_image
    Name the primary objects to be identified:Tissue_object
    Typical diameter of objects, in pixel units (Min,Max):50,5000000
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Select the thresholding method:Binary image
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    Method to distinguish clumped objects:None
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    Name the outline image:Tissue_object_green
    Fill holes in identified objects?:No
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    Select binary image:entropy_image_binary
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
UnmixColors:[module_num:4|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notes:['Split Fibrin and Collagen into separate channels']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
    Stain count:2
    Color image:Original
    Image name:Fibrin
    Stain:Custom
    Red absorbance:0.165976
    Green absorbance:0.958802
    Blue absorbance:0.230544
    Image name:Collagen
    Stain:Custom
    Red absorbance:0.724924
    Green absorbance:0.646672
    Blue absorbance:0.23728

MaskImage:[module_num:5|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notes:['Only analyse DAB in the previously defined Tissue']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
    Select the input image:Fibrin
    Name the output image:Tissue_Masked_MSB-channel
    Use objects or an image as a mask?:Objects
    Select object for mask:Tissue_object
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:6|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notes:["Identify DAB positive area's (yellow)"]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
    Select the input image:Tissue_Masked_MSB-channel
    Name the primary objects to be identified:MSB_object
    Typical diameter of objects, in pixel units (Min,Max):6,5000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:0
    Lower and upper bounds on threshold:0.15,1.0
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    Method to distinguish clumped objects:None
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    Name the outline image:MSB_object_yellow
    Fill holes in identified objects?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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    Handling of objects if excessive number of objects identified:Continue
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
MaskImage:[module_num:7|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notes:['Only analyse Nuclei (red) in the previously defined DAB tissue (yellow)']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
    Select the input image:Fibrin
    Name the output image:MSB_object_mask
    Use objects or an image as a mask?:Objects
    Select object for mask:MSB_object
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    Invert the mask?:No

OverlayOutlines:[module_num:8|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notes:['The next outline is ontop of the previous one.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Original
    Name the output image:OrigOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:Tissue_object_green
    Select outline color:Green
    Select outlines to display:MSB_object_yellow
    Select outline color:Yellow

SaveImages:[module_num:9|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notes:['Save outlined images', 'These image are usually not used for further analysis and can be stored in lossy JPEG if wanted.']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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:.counted
    Select file format to use:png
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

MeasureImageAreaOccupied:[module_num:10|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notes:['Measure Tissue (green) and HE nuclei (blue) and DAB area (yellow) and red) area']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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:Tissue_object_green
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:MSB_object_yellow

ExportToDatabase:[module_num:11|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notes:['Export findings to database for further analysis']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
    Database type:MySQL / CSV
    Database name:CellProfiler
    Add a prefix to table names?:No
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    SQL file prefix:SQL_
    Output file location:Default Output Folder|None
    Create a CellProfiler Analyst properties file?:No
    Database host:localhost
    Username:cp
    Password:Count!
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    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
    Calculate the per-well mean values of object measurements?:Yes
    Calculate the per-well median values of object measurements?:Yes
    Calculate the per-well standard deviation values of object measurements?:Yes
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object or a single object table?:Single object table
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    Write image thumbnails directly to the database?:No
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    Hidden:1
    Hidden:1
    Hidden:0
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